#=====================================
# Electromagnetic processes
#=====================================

/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess GammaConversion
/gate/physics/processes/GammaConversion/setModel StandardModel

/gate/physics/addProcess ElectronIonisation e+
/gate/physics/addProcess ElectronIonisation e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setStepFunction e+ 0.2 0.1 mm
/gate/physics/processes/ElectronIonisation/setStepFunction e- 0.2 0.1 mm

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-

/gate/physics/addProcess PositronAnnihilation
/gate/physics/processes/G4PositronAnnihilation/setModel StandardModel

/gate/physics/addProcess eMultipleScattering e-
/gate/physics/addProcess eMultipleScattering e+

/gate/physics/addProcess HadronIonisation
/gate/physics/removeProcess HadronIonisation deuteron
/gate/physics/removeProcess HadronIonisation triton
/gate/physics/removeProcess HadronIonisation He3
/gate/physics/removeProcess HadronIonisation alpha
/gate/physics/removeProcess HadronIonisation GenericIon
/gate/physics/processes/HadronIonisation/setStepFunction proton 0.2 0.05 mm
/gate/physics/processes/HadronIonisation/setStepFunction pi+ 0.2 0.05 mm
/gate/physics/processes/HadronIonisation/setStepFunction pi- 0.2 0.05 mm

/gate/physics/addProcess IonIonisation
/gate/physics/processes/IonIonisation/setStepFunction GenericIon 0.1 0.02 mm
/gate/physics/processes/IonIonisation/setStepFunction alpha 0.1 0.02 mm
/gate/physics/processes/IonIonisation/setStepFunction deuteron 0.1 0.02 mm
/gate/physics/processes/IonIonisation/setStepFunction triton 0.1 0.02 mm
/gate/physics/processes/IonIonisation/setStepFunction He3 0.1 0.02 mm

#=====================================
# Hadronic processes
#=====================================

/gate/physics/addProcess HadronElastic GenericIon
/gate/physics/processes/HadronElastic/setModel G4LElastic GenericIon

/gate/physics/addProcess ProtonInelastic
/gate/physics/processes/ProtonInelastic/setModel G4BinaryCascade
/gate/physics/processes/ProtonInelastic/G4BinaryCascade/setEmin 0 MeV
/gate/physics/processes/ProtonInelastic/G4BinaryCascade/setEmax 500 GeV

/gate/physics/addProcess IonInelastic
/gate/physics/processes/IonInelastic/setModel G4BinaryLightIonReaction
/gate/physics/processes/IonInelastic/setModel G4LEDeuteronInelastic deuteron
/gate/physics/processes/IonInelastic/setModel G4LETritonInelastic triton
/gate/physics/processes/IonInelastic/setModel G4LEAlphaInelastic alpha
/gate/physics/processes/IonInelastic/G4BinaryLightIonReaction/setEmin 80 MeV deuteron
/gate/physics/processes/IonInelastic/G4BinaryLightIonReaction/setEmax 20 GeV deuteron
/gate/physics/processes/IonInelastic/G4BinaryLightIonReaction/setEmin 80 MeV triton
/gate/physics/processes/IonInelastic/G4BinaryLightIonReaction/setEmax 20 GeV triton
/gate/physics/processes/IonInelastic/G4BinaryLightIonReaction/setEmin 80 MeV alpha
/gate/physics/processes/IonInelastic/G4BinaryLightIonReaction/setEmax 20 GeV alpha
/gate/physics/processes/IonInelastic/G4LEDeuteronInelastic/setEmin 0 MeV deuteron
/gate/physics/processes/IonInelastic/G4LEDeuteronInelastic/setEmax 80 MeV deuteron
/gate/physics/processes/IonInelastic/G4LETritonInelastic/setEmin 0 MeV triton
/gate/physics/processes/IonInelastic/G4LETritonInelastic/setEmax 80 MeV triton
/gate/physics/processes/IonInelastic/G4LEAlphaInelastic/setEmin 0 MeV alpha
/gate/physics/processes/IonInelastic/G4LEAlphaInelastic/setEmax 80 MeV alpha
/gate/physics/processes/IonInelastic/setDataSet G4IonsShenCrossSection GenericIon
/gate/physics/processes/IonInelastic/setDataSet G4TripathiLightCrossSection deuteron
/gate/physics/processes/IonInelastic/setDataSet G4TripathiLightCrossSection triton
/gate/physics/processes/IonInelastic/setDataSet G4TripathiLightCrossSection alpha

/gate/physics/addProcess PionPlusInelastic
/gate/physics/processes/PionPlusInelastic/setModel G4LEPionPlusInelastic

/gate/physics/addProcess PionMinusInelastic
/gate/physics/processes/PionMinusInelastic/setModel G4LEPionMinusInelastic

/gate/physics/addProcess NeutronCapture
/gate/physics/processes/NeutronCapture/setModel G4NeutronHPCapture
/gate/physics/processes/NeutronCapture/G4NeutronHPCapture/setEmin 0 MeV
/gate/physics/processes/NeutronCapture/G4NeutronHPCapture/setEmax 20 MeV
/gate/physics/processes/NeutronCapture/setModel G4LCapture
/gate/physics/processes/NeutronCapture/G4LCapture/setEmin 14 MeV
/gate/physics/processes/NeutronCapture/G4LCapture/setEmax 20 GeV
/gate/physics/processes/NeutronCapture/setDataSet G4NeutronHPCaptureData
/gate/physics/processes/NeutronCapture/setDataSet G4HadronCaptureDataSet

/gate/physics/addProcess Fission
/gate/physics/processes/Fission/setModel G4NeutronHPFission
/gate/physics/processes/Fission/G4NeutronHPFission/setEmin 0 MeV
/gate/physics/processes/Fission/G4NeutronHPFission/setEmax 20 MeV
/gate/physics/processes/Fission/setModel G4LFission
/gate/physics/processes/Fission/G4LFission/setEmin 14 MeV
/gate/physics/processes/Fission/G4LFission/setEmax 20 GeV
/gate/physics/processes/Fission/setDataSet G4NeutronHPFissionData
/gate/physics/processes/Fission/setDataSet G4HadronFissionDataSet

/gate/physics/addProcess NeutronInelastic
/gate/physics/processes/NeutronInelastic/setModel G4NeutronHPInelastic
/gate/physics/processes/NeutronInelastic/G4NeutronHPInelastic/setEmin 0 MeV
/gate/physics/processes/NeutronInelastic/G4NeutronHPInelastic/setEmax 20 MeV
/gate/physics/processes/NeutronInelastic/setDataSet G4NeutronHPInelasticData neutron
/gate/physics/processes/NeutronInelastic/setModel G4BinaryCascade
/gate/physics/processes/NeutronInelastic/G4BinaryCascade/setEmin 14 MeV
/gate/physics/processes/NeutronInelastic/G4BinaryCascade/setEmax 20 GeV
/gate/physics/processes/NeutronInelastic/setDataSet G4NeutronInelasticCrossSection neutron

/gate/physics/addProcess Decay
/gate/physics/addProcess RadioactiveDecay

#=====================================
# Options
#=====================================
/gate/physics/setEMin 0.1 keV
/gate/physics/setEMax 10 TeV
#/gate/physics/setDEDXBinning 220
#/gate/physics/setLambdaBinning 220
#/gate/physics/Gamma/SetCutInRegion world 0.1 mm
#/gate/physics/Electron/SetCutInRegion world 0.1 mm
#/gate/physics/Positron/SetCutInRegion world 0.1 mm






