# N13 map from the proton beam simulation

# ALWAYS USE THE KEYWORD voxel TO DECLARE THE TYPE
/gate/source/addSource						n_13 voxel

# DECLARATION THAT THE VOXELIZED SOURCE WILL BE ENTERED USING IMAGE DATA
/gate/source/n_13/reader/insert				image

# INSERT THE TRANSLATOR THAT WILL CONVERT THE IMAGE FROM DIGITAL VALUES TO ACTIVITY VALUES 
/gate/source/n_13/imageReader/translator/insert              linear
/gate/source/n_13/imageReader/linearTranslator/setScale      1. Bq

# THE FOLLOWING LINE ALLOWS YOU TO INSERT THE IMAGE DATA USING THE APPROPRIATE EXTENSION FILE
/gate/source/n_13/imageReader/readFile                       output_4M/N13_map-Stop.txt 
/gate/source/n_13/imageReader/verbose                        1

 # SO THE VOXELIZED SOURCE HAS TO BE SHIFTED OVER HALF ITS DIMENSION IN THE NEGATIVE DIRECTION ON EACH AXIS  
/gate/source/n_13/setPosition                                -50. -50. -200. mm 
/gate/source/n_13/dump                                       1 
 
 # THE FOLLOWING LINES CHARACTERIZE THE SIZE (NO DIFFERENCE WITH AN ANALYTICAL SOURCE)
/gate/source/n_13/gps/particle ion
/gate/source/n_13/gps/ion 7 13 0 0 
/gate/source/n_13/setForcedUnstableFlag true
/gate/source/n_13/useDefaultHalfLife
/gate/source/n_13/gps/angtype iso 
 
 