# C11 map from the proton beam simulation

# ALWAYS USE THE KEYWORD voxel TO DECLARE THE TYPE
/gate/source/addSource						s_31 voxel

# DECLARATION THAT THE VOXELIZED SOURCE WILL BE ENTERED USING IMAGE DATA
/gate/source/s_31/reader/insert				image

# INSERT THE TRANSLATOR THAT WILL CONVERT THE IMAGE FROM DIGITAL VALUES TO ACTIVITY VALUES 
/gate/source/s_31/imageReader/translator/insert              linear
/gate/source/s_31/imageReader/linearTranslator/setScale      1. Bq

# THE FOLLOWING LINE ALLOWS YOU TO INSERT THE IMAGE DATA USING THE APPROPRIATE EXTENSION FILE
/gate/source/s_31/imageReader/readFile                       output/S31_map-Stop.txt 
/gate/source/s_31/imageReader/verbose                        1

 # SO THE VOXELIZED SOURCE HAS TO BE SHIFTED OVER HALF ITS DIMENSION IN THE NEGATIVE DIRECTION ON EACH AXIS  
/gate/source/s_31/setPosition                                -50. -50. -200. mm 
/gate/source/s_31/dump                                       1 
 
 # THE FOLLOWING LINES CHARACTERIZE THE SIZE (NO DIFFERENCE WITH AN ANALYTICAL SOURCE)
/gate/source/s_31/gps/particle ion
/gate/source/s_31/gps/ion 16 31 0 0 
/gate/source/s_31/setForcedUnstableFlag true
/gate/source/s_31/useDefaultHalfLife
/gate/source/s_31/gps/angtype iso 
 
 